PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mYousefi
  keyboardBackend = ioHub
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Routines
  Routine instruction
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    PolygonComponent background
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent PressText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'space' if you are ready...
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    KeyboardComponent Resp1Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Fc
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    PolygonComponent back2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    PolygonComponent FixationCross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine taskT1
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    PolygonComponent back3
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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    TextComponent OtherText
      letterHeight = 0.09
      pos = (0,0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      text [set every repeat] = The Other Person is listening to...
      units = norm
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    ImageComponent Pic
      image [set every repeat] = $image
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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    SoundComponent SoundRout
      saveStartStop = False
      sound [set every repeat] = $vc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine BreakRoutine
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    PolygonComponent back5
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent BreakText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Have a break...
        press 'space' if you are ready
    KeyboardComponent Resp2Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block2
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    PolygonComponent back4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    TextComponent SelfQ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = How Pleasant was the sound for You?
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    SliderComponent RatingRespS
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine Finish
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    PolygonComponent back7
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent TnxParticipants
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for your Particiption!
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    KeyboardComponent Resp3Space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Response
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    PolygonComponent back6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    TextComponent Quest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $text
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    SliderComponent RatingResp
      forceEndRoutine = True
      granularity = 1
      labels = -10 ,0 , +10
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (1.65, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine Start
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    PolygonComponent back8
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent practiceText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'space' to start the practice trial...
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    KeyboardComponent Resp4Space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Start
  LoopInitiator PracticeTrial loopType="TrialHandler"
    conditionsFile = practice.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'vc': 'dog_audio', 'image': 'wave_image', 'duration': 4, 'text': 'How Pleasant was the sound for You?'},
      {'vc': 'cat_audio', 'image': 'wave_image', 'duration': 4, 'text': 'How Pleasant was the sound for You?'},
      {'vc': 'alarm_audio', 'image': 'cat_image', 'duration': 4, 'text': 'How Pleasant was the sound for You?'},
      {'vc': 'dog_audio', 'image': 'cat_image', 'duration': 4, 'text': 'How Pleasant was the sound for the Other?'},
      {'vc': 'wave_audio', 'image': 'alarm_image', 'duration': 4, 'text': 'How Pleasant was the sound for the Other?'},
      {'vc': 'cat_audio', 'image': 'dog_image', 'duration': 4, 'text': 'How Pleasant was the sound for the Other?'},
      {'vc': 'alarm_audio', 'image': 'dog_image', 'duration': 4, 'text': 'How Pleasant was the sound for the Other?'}]
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator PracticeTrial
  Routine instruction
  Routine Fc
  LoopInitiator Try1 loopType="TrialHandler"
    conditionsFile = before.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'vc': 'attack_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'dentist_audio', 'image': 'party_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'bees_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'babiescry_audio', 'image': 'seagul_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'party_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 2, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'applause_audio', 'image': 'party_image', 'duration': 3, 'congruency': 2, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'beforeBreak', 'codeExplan': 2, 'explanation': 'pleasant congruent self'}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
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator Try1
  Routine BreakRoutine
  Routine Fc
  LoopInitiator Try2 loopType="TrialHandler"
    conditionsFile = after.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'vc': 'attack_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'dentist_audio', 'image': 'party_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'bees_audio', 'image': 'baby_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'babiescry_audio', 'image': 'seagul_image', 'duration': 3, 'congruency': 1, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 1, 'explanation': 'unpleasant incongruent self'},
      {'vc': 'party_audio', 'image': 'applause_image', 'duration': 3, 'congruency': 2, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 2, 'explanation': 'pleasant congruent self'},
      {'vc': 'applause_audio', 'image': 'party_image', 'duration': 3, 'congruency': 2, 'text': 'How Pleasant was the sound for You?', 'mode': 'self', 'BA': 'afterBreak', 'CodeExplan': 2, 'explanation': 'pleasant congruent self'}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
    Routine taskT1
    Routine Response
    Routine Fc
  LoopTerminator Try2
  Routine Finish
